PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1, -1, -1]
  expName = priming
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine probe
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    PolygonComponent l_circle_2
      fillColor = black
      pos [set every repeat] = (-stim_pos, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent r_circle_2
      fillColor = black
      pos [set every repeat] = (stim_pos, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent l_probe_image
      image [set every repeat] = nogo.png
      pos [set every repeat] = (-stim_pos, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    ImageComponent r_probe_image
      image [set every repeat] = go.png
      pos [set every repeat] = (stim_pos, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    PolygonComponent l_fix_2
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (-stim_pos, 0)
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent r_fix_2
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (stim_pos, 0)
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine intro
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    TextboxComponent introtxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Instructions, blah, blah, blah

        Press the space bar to start
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    VariableComponent stim_pos
      startExpValue = 0.39
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  Routine ISI
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    PolygonComponent l_circle_5
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (-stim_pos, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent r_circle_5
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (stim_pos, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent l_fix_5
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (-stim_pos, 0)
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent r_fix_5
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (stim_pos, 0)
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine end
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    CodeComponent set_endtxt
      Code Type = Auto->JS
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      Begin Routine:
        endtxt = 'You scored ' + str(correct_counter) + ' correct!'
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $endtxt
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  Routine cue
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    PolygonComponent l_circle_1
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (-stim_pos, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent r_circle_1
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (stim_pos, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent l_fix_1
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (-stim_pos, 0)
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent r_fix_1
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (stim_pos, 0)
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent red_cue
      forceEndRoutine = False
      sound [set every repeat] = Red.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine subjective_response
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    TextComponent l_subj_question
      letterHeight = 0.05
      pos = (-stim_pos, 0.25)
      startVal [time (s)] = 0.0
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      text:
        Flashed
        Color?
    TextComponent r_subj_question
      letterHeight = 0.05
      pos = (stim_pos, 0.25)
      startVal [time (s)] = 0.0
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      text:
        Flashed
        Color?
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
        mouse_3.setPos(newPos = (0, randint(-15,15)/100))
      Each Frame:
        mouseY = mouse.getPos()[1]
        if (mouseY >= 0.05):
            l_red_subj_square.fillColor = 'gray'
            r_red_subj_square.fillColor = 'gray'
            l_mix_subj_square.fillColor = 'black'
            r_mix_subj_square.fillColor = 'black'
            l_green_subj_square.fillColor = 'black'
            r_green_subj_square.fillColor = 'black'
        if ((mouseY < 0.05) and (mouseY > -0.05)):
            l_red_subj_square.fillColor = 'black'
            r_red_subj_square.fillColor = 'black'
            l_mix_subj_square.fillColor = 'gray'
            r_mix_subj_square.fillColor = 'gray'
            l_green_subj_square.fillColor = 'black'
            r_green_subj_square.fillColor = 'black'
        if (mouseY <= -0.05):
            l_red_subj_square.fillColor = 'black'
            r_red_subj_square.fillColor = 'black'
            l_mix_subj_square.fillColor = 'black'
            r_mix_subj_square.fillColor = 'black'
            l_green_subj_square.fillColor = 'gray'
            r_green_subj_square.fillColor = 'gray'
    PolygonComponent l_red_subj_square
      fillColor = black
      pos = (-stim_pos, 0.12)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_red_subj_square
      fillColor = black
      pos = (stim_pos, .12)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent l_mix_subj_square
      fillColor = black
      pos = (-stim_pos, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_mix_subj_square
      fillColor = black
      pos = (stim_pos, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent l_green_subj_square
      fillColor = black
      pos = (-stim_pos, -0.12)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_green_subj_square
      fillColor = black
      pos = (stim_pos, -0.12)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent l_red_subj_letter
      letterHeight = 0.05
      pos = (-stim_pos, 0.12)
      startVal [time (s)] = 0.0
      text = R
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    TextComponent r_red_subj_letter
      letterHeight = 0.05
      pos = (stim_pos, 0.12)
      startVal [time (s)] = 0.0
      text = R
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    TextComponent l_mix_subj_letter
      letterHeight = 0.05
      pos = (-stim_pos, 0)
      startVal [time (s)] = 0.0
      text = M
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    TextComponent r_mix_subj_letter
      letterHeight = 0.05
      pos = (stim_pos, 0)
      startVal [time (s)] = 0.0
      text = M
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    TextComponent l_green_subj_letter
      letterHeight = 0.05
      pos = (-stim_pos, -0.12)
      startVal [time (s)] = 0.0
      text = G
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    TextComponent r_green_subj_letter
      letterHeight = 0.05
      pos = (stim_pos, -0.12)
      startVal [time (s)] = 0.0
      text = G
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  Routine start_trial
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent l_cue
      letterHeight = 0.05
      pos = (-stim_pos, 0.1)
      startVal [time (s)] = 0.0
      text = R
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    TextComponent r_cue
      letterHeight = 0.05
      pos = (stim_pos, 0.1)
      startVal [time (s)] = 0.0
      text = R
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    TextComponent l_text
      letterHeight = 0.05
      pos = (-stim_pos, -.2)
      startVal [time (s)] = 0.0
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      text:
        Fixate the target
        and press space bar
        to begin next trial
    TextComponent r_text
      letterHeight = 0.05
      pos = (stim_pos, -.2)
      startVal [time (s)] = 0.0
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      text:
        Fixate the target
        and press space bar
        to begin next trial
    PolygonComponent l_circle
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (-stim_pos, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_circle
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (stim_pos, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent l_fix
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (-stim_pos, 0)
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
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    PolygonComponent r_fix
      fillColor = black
      lineWidth = 2
      pos [set every repeat] = (stim_pos, 0)
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
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  Routine probe_response
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    TextComponent l_probe_question
      letterHeight = 0.05
      pos = (-stim_pos, 0.19)
      startVal [time (s)] = 0.0
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      text:
        Square
        Location?
    TextComponent r_probe_question
      letterHeight = 0.05
      pos = (stim_pos, 0.19)
      startVal [time (s)] = 0.0
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      text:
        Square
        Location?
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
        mouse_3.setPos(newPos = (0, randint(-25,25)/100))
      Each Frame:
        mouseY = mouse_2.getPos()[1]
        if (mouseY > 0):
            l_up_probe_square.fillColor = 'gray'
            l_down_probe_square.fillColor = 'black'
            r_up_probe_square.fillColor = 'gray'
            r_down_probe_square.fillColor = 'black'
        else:
            l_up_probe_square.fillColor = 'black'
            l_down_probe_square.fillColor = 'gray'
            r_up_probe_square.fillColor = 'black'
            r_down_probe_square.fillColor = 'gray'
    PolygonComponent l_up_probe_square
      fillColor = black
      pos = (-stim_pos, 0.06)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_up_probe_square
      fillColor = black
      pos = (stim_pos, 0.06)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent l_down_probe_square
      fillColor = black
      pos = (-stim_pos, -0.06)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_down_probe_square
      fillColor = black
      pos = (stim_pos, -0.06)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent l_up_probe_arrow
      fillColor = white
      pos = (-stim_pos, 0.06)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent r_up_probe_arrow
      fillColor = white
      pos = (stim_pos, 0.06)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent l_down_probe_arrow
      fillColor = white
      ori = 180
      pos = (-stim_pos, -0.06)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent r_down_probe_arrow
      fillColor = white
      ori = 180
      pos = (stim_pos, -0.06)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine vividness_response
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
        mouse_3.setPos(newPos = (0, randint(-25,25)/100))
      Each Frame:
        mouseY = mouse_3.getPos()[1]
        if (mouseY >= 0.15):
            l_one_vividness_square.fillColor = 'gray'
            r_one_vividness_square.fillColor = 'gray'
            l_two_vividness_square.fillColor = 'black'
            r_two_vividness_square.fillColor = 'black'
            l_three_vividness_square.fillColor = 'black'
            r_three_vividness_square.fillColor = 'black'
            l_four_vividness_square.fillColor = 'black'
            r_four_vividness_square.fillColor = 'black'
            l_five_vividness_square.fillColor = 'black'
            r_five_vividness_square.fillColor = 'black'
        if ((mouseY >= 0.05) and (mouseY < 0.15)):
            l_one_vividness_square.fillColor = 'black'
            r_one_vividness_square.fillColor = 'black'
            l_two_vividness_square.fillColor = 'gray'
            r_two_vividness_square.fillColor = 'gray'
            l_three_vividness_square.fillColor = 'black'
            r_three_vividness_square.fillColor = 'black'
            l_four_vividness_square.fillColor = 'black'
            r_four_vividness_square.fillColor = 'black'
            l_five_vividness_square.fillColor = 'black'
            r_five_vividness_square.fillColor = 'black'
        if ((mouseY >= -0.05) and (mouseY < 0.05)):
            l_one_vividness_square.fillColor = 'black'
            r_one_vividness_square.fillColor = 'black'
            l_two_vividness_square.fillColor = 'black'
            r_two_vividness_square.fillColor = 'black'
            l_three_vividness_square.fillColor = 'gray'
            r_three_vividness_square.fillColor = 'gray'
            l_four_vividness_square.fillColor = 'black'
            r_four_vividness_square.fillColor = 'black'
            l_five_vividness_square.fillColor = 'black'
            r_five_vividness_square.fillColor = 'black'
        if ((mouseY >= -0.15) and (mouseY < -0.05)):
            l_one_vividness_square.fillColor = 'black'
            r_one_vividness_square.fillColor = 'black'
            l_two_vividness_square.fillColor = 'black'
            r_two_vividness_square.fillColor = 'black'
            l_three_vividness_square.fillColor = 'black'
            r_three_vividness_square.fillColor = 'black'
            l_four_vividness_square.fillColor = 'gray'
            r_four_vividness_square.fillColor = 'gray'
            l_five_vividness_square.fillColor = 'black'
            r_five_vividness_square.fillColor = 'black'
        if (mouseY < -0.15):
            l_one_vividness_square.fillColor = 'black'
            r_one_vividness_square.fillColor = 'black'
            l_two_vividness_square.fillColor = 'black'
            r_two_vividness_square.fillColor = 'black'
            l_three_vividness_square.fillColor = 'black'
            r_three_vividness_square.fillColor = 'black'
            l_four_vividness_square.fillColor = 'black'
            r_four_vividness_square.fillColor = 'black'
            l_five_vividness_square.fillColor = 'gray'
            r_five_vividness_square.fillColor = 'gray'
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    TextComponent l_vividness_question
      letterHeight = 0.05
      pos = (-stim_pos, 0.37)
      startVal [time (s)] = 0.0
      text = Vividness?
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    TextComponent r_vividness_question
      letterHeight = 0.05
      pos = (stim_pos, 0.37)
      startVal [time (s)] = 0.0
      text = Vividness?
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent l_one_vividness_square
      fillColor = black
      pos = (-stim_pos, 0.24)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_one_vividness_square
      fillColor = black
      pos = (stim_pos, 0.24)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent l_two_vividness_square
      fillColor = black
      pos = (-stim_pos, 0.12)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent l_three_vividness_square
      fillColor = black
      pos = (-stim_pos, 0.0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent l_four_vividness_square
      fillColor = black
      pos = (-stim_pos, -0.12)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent l_five_vividness_square
      fillColor = black
      pos = (-stim_pos, -0.24)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_two_vividness_square
      fillColor = black
      pos = (stim_pos, 0.12)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_three_vividness_square
      fillColor = black
      pos = (stim_pos, 0.0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_four_vividness_square
      fillColor = black
      pos = (stim_pos, -0.12)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent r_five_vividness_square
      fillColor = black
      pos = (stim_pos, -0.24)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent l_one_vividness_number
      letterHeight = 0.05
      pos = (-stim_pos, 0.24)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent r_one_vividness_number
      letterHeight = 0.05
      pos = (stim_pos, 0.24)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent l_two_vividness_number
      letterHeight = 0.05
      pos = (-stim_pos, 0.12)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent l_three_vividness_number
      letterHeight = 0.05
      pos = (-stim_pos, 0.0)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent l_four_vividness_number
      letterHeight = 0.05
      pos = (-stim_pos, -0.12)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent l_five_vividness_number
      letterHeight = 0.05
      pos = (-stim_pos, -0.24)
      startVal [time (s)] = 0.0
      text = 5
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 100
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    conditions:
      [{'this_image': 'go.png', 'corr_ans': 'space'},
      {'this_image': 'go.png', 'corr_ans': 'space'},
      {'this_image': 'go.png', 'corr_ans': 'space'},
      {'this_image': 'nogo.png', 'corr_ans': None}]
    Routine start_trial
    Routine cue
    Routine probe
    Routine subjective_response
    Routine probe_response
    Routine vividness_response
  LoopTerminator trials
  Routine end
